// Title of the tool: Multi-Channels Image and Stack Helper
// First version: 18/01/2011 update 02/03/2012

// Description: allows a non-destructive contrast adjustment on 8 or 16 bit images, stacks, composite images
// and hyperstacks. It permits to optimise the visualisation by fitting the LUT to the 24 bit screen mode, and
// to edit some RGB documents for presentations and papers.

// Author : Gilles Carpentier
// Faculte des Sciences et Technologie,
// Universite Paris Est Creteil Val de Marne, France.

var composite=0, globalBitDepth=0, MinContrast=0,MaxContrast=0,minUser=0,maxUser=0;
var depthSampling=newArray ("8","10","12","15","16");
var contrastOptions = newArray ("8 bit sampling \(0-255\)","10 bit sampling \(0-1023\)","12 bit sampling \(0-4095\)","15 bit sampling \(0-32767\)","16 bit sampling \(0-65535\)", "min->max all channels", "min->max each channel");
var chosenContratsOption ="min->max all channels", rgbOption=0;
var checkList=newArray;
var channelOrder="xyzct",channelOrderChoices=newArray("xyczt(default)","xyctz","xyzct","xyztc","xytcz","xytzc"),Zchoice=1, tChoice=1, nbSlice=1, nbChannel=4, nbz=1, nbt=1, totSlices=0;
var ColorAvailable=newArray ("Grays","Red","Green","Blue","Cyan","Yellow","Magenta"),ColorChs=newArray("Red","Green","Blue","Grays");
var depthChoices=newArray ("Unchange","Bit Depth"), depthChoice="Unchange";
var checkList2=newArray, depthChoice2="Unchange";


var methodProj="Max Intensity", methodProjs=newArray ("Max Intensity","Sum Slices","Average Intensity","Standard Deviation","Min Intensity","Median");
var errorNetMessage ="Error: ";
var urllist = "http://image.bio.methods.free.fr/ij/ijupdatetest/ListOfMacros.txt";// to check the internet access
var onlinedoclink = "http://image.bio.methods.free.fr/ImageJ/?Multi-Channels-Image-and-Stack.html";

var demoimagelink1 = "http://image.bio.methods.free.fr/ij/ijmacro/Composit/NiceCells.tif.zip";
var demoimagelink2 = "http://image.bio.methods.free.fr/ij/ijmacro/Composit/NiceCompositZ-RGP-Stack-s.tif.zip";
var demoimagelink3 = "http://image.bio.methods.free.fr/ij/ijmacro/Composit/HistoMuscle-4Channels.tif.zip";

var demoimagename1 = "NiceCells.tif";
var demoimagename2 = "NiceCompositZ-RGP-Stack-s.tif";
var demoimagename3 = "HistoMuscle-4Channels.tif";
// ------- //

var xx = requires146i (); // check version at install time
function requires146i() {requires("1.46i"); return 0;}

var dCmds = newMenu("Stacks Menu Tool",newArray ("Multi-Channels Stack From Single Channel Files","Stack to Hyperstack"));
macro "Stacks Menu Tool - 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"{
	cmd = getArgument();
	if (cmd!="-" && cmd == "Multi-Channels Stack From Single Channel Files") run("Merge Channels...");	
	if (cmd!="-" && cmd == "Stack to Hyperstack") stacksToHyperStacks ();
}

macro "Make Composite Action Tool - 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"{
	imageID= getImageID();
	run("Make Composite", "display=Grayscale");	
	if (isOpen("Channels")) {
		selectWindow("Channels");
		run("Close");	
	}
	if (isOpen (imageID)) selectImage (imageID);
//	if (! is("composite")) run("Make Composite", "display=Grayscale");
	setColorForChannels (imageID);
	if (!is("Batch Mode")) setBatchMode(true);
	if (isOpen (imageID)) selectImage (imageID);
	run("Make Composite", "display=Composite");
	imageID= getImageID();
	getDimensions(w, h, channels, slices, frames);
	for (i=0; i<channels; i++) {
		if (nSlices > 1)  Stack.setChannel(i+1);
		if (ColorChs[i] == "Red") run("Red");  
		if (ColorChs[i] == "Green") run("Green");
		if (ColorChs[i] == "Blue") run("Blue"); 
		if (ColorChs[i] == "Cyan") run("Cyan");
		if (ColorChs[i] == "Yellow") run("Yellow"); 
		if (ColorChs[i] == "Magenta") run("Magenta");
		if (ColorChs[i] == "Grays") run("Grays");
	}
	run("Channels Tool... ");
	setBatchMode("exit and display");	
}

var aCmds = newMenu("Adjust Channel Levels Menu Tool",newArray ("8 bit sampling \(0-255\)","10 bit sampling \(0-1023\)","12 bit sampling \(0-4095\)","15 bit sampling \(0-32767\)","16 bit sampling \(0-65535\)","min->max all channels","min->max each channel","between two set values","-","RGB Option"));
macro "Adjust Channel Levels Menu Tool - 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"{
	cmd = getArgument();
	if (cmd!="-" && cmd == "8 bit sampling \(0-255\)") {
		chosenContratsOption = "8 bit sampling \(0-255\)";
		setLUTsHisto ();
	}
	if (cmd!="-" && cmd == "10 bit sampling \(0-1023\)") {
		chosenContratsOption = "10 bit sampling \(0-1023\)";
		setLUTsHisto ();
	}
	if (cmd!="-" && cmd == "12 bit sampling \(0-4095\)") {
		chosenContratsOption = "12 bit sampling \(0-4095\)";
		setLUTsHisto ();
	}
	if (cmd!="-" && cmd == "15 bit sampling \(0-32767\)") {
		chosenContratsOption = "15 bit sampling \(0-32767\)";
		setLUTsHisto ();
	}
	if (cmd!="-" && cmd == "16 bit sampling \(0-65535\)") {
		chosenContratsOption = "16 bit sampling \(0-65535\)";
		setLUTsHisto ();
	}
	if (cmd!="-" && cmd == "min->max all channels") {
		chosenContratsOption = "min->max all channels";
		setLUTsHisto ();
	}
	if (cmd!="-" && cmd == "min->max each channel") {
		chosenContratsOption = "min->max each channel";
		setLUTsHisto ();
	}
	if (cmd!="-" && cmd == "between two set values") {
		chosenContratsOption = "between two set values";
		setLUTsHisto ();
	}
	if (cmd!="-" && cmd == "RGB Option") {	
		RGBChoice ();	
	}	
}

macro "Adjust Min and Max Action Tool - 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"{
	run("Color Balance...");
}

macro "Z Projection Action Tool - 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"{
	Stack.getDimensions(widthS, heightS, channelsS, slicesS, framesS);
	run("Z Project...", "projection=&methodProj");
}

macro "Remove Current Channel Action Tool -  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"{
	Stack.getPosition(channel, slice, frame);	
	Stack.getDimensions(width, height, channels, slices, frames);
	if (channels <= 1) exit ("This function requires at least 2 channels");
	showMessageWithCancel ("The channel "+ channel + " will be removed. Continue ?" );
	run("Delete Slice", "delete=channel");
	run("Make Composite");
	imageID = getImageID();
	run("Channels Tool... ");
	selectImage(imageID);
}

var dCmds = newMenu("On Line Documentation & Demo Menu Tool",newArray ("Open On Line Documentation","Download 3 Single-Channel Images","Download a 3 Channels Stack","Download a 4 Channels Stack","Download a 4D Stack","-","About this Toolset \(off line\)"));
macro "On Line Documentation & Demo Menu Tool - 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"{
	cmd = getArgument();

	if (cmd!="-" && cmd == "Open On Line Documentation") {
		doc ();
	}
	if (cmd!="-" && cmd == "Download 3 Single-Channel Images") {
		if (!is("Batch Mode")) setBatchMode(true);
		OpenImageLink(demoimagelink1,demoimagename1,1);
		run("Stack to Images");	
		setBatchMode("exit and display");
	}	
	if (cmd!="-" && cmd == "Download a 3 Channels Stack") {
		OpenImageLink(demoimagelink1,demoimagename1,1);
	}	
	if (cmd!="-" && cmd == "Download a 4 Channels Stack") {
		OpenImageLink(demoimagelink3,demoimagename3,1);
	}		
	if (cmd!="-" && cmd == "Download a 4D Stack") {
		OpenImageLink(demoimagelink2,demoimagename2,1);
	}	
	if (cmd!="-" && cmd == "About this Toolset \(off line\)") {
		aboutTheTools ();
	}	
} 

macro "Version and Update Infos Action Tool - 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" {
	VersionInfos ();
}

// menu popup giving acces to the original (full) functions of ImageJ (click right)
var pmCmds = newMenu("Popup Menu", newArray("Stack to Hyperstack...","Channels Tool...","Z Project...","Delete Slice","Convert to RGB","-", "About this Toolset" ));
macro "Popup Menu" {
	cmd = getArgument();	
	if (cmd !="-" && cmd =="Stack to Hyperstack...")  {run("Stack to Hyperstack...");}
	if (cmd !="-" && cmd =="Channels Tool...")  {run("Channels Tool... ");}
	if (cmd !="-" && cmd =="Z Project...")  {run("Z Project...");}
	if (cmd !="-" && cmd =="Delete Slice") {run("Delete Slice");}
	if (cmd!="-" && cmd == "Convert to RGB") {run("Stack to RGB");}	
	if (cmd !="-" && cmd =="About this Toolset")  {aboutTheTools ();} 
}

function stacksToHyperStacks () {
	if  (nbChannel > nSlices) nbChannel=nSlices;
	totSlices = (nbz * nbChannel) * nbt;
	first=0;
	if (nbSlice != nbChannel) {
		while (totSlices != nSlices || first <1) {
			Dialog.create("Dimension Specifying");
			if (totSlices != nSlices && totSlices  > nbChannel) Dialog.addMessage("! Slice number of the current stack is not compatible with these settings\n");
			Dialog.addNumber("Channel number ?", nbChannel);
			if (Zchoice ==1) Dialog.addNumber("z steps number ?", nbz);
			if (tChoice ==1) Dialog.addNumber("t steps number ?", nbt);	
			Dialog.addChoice("Order of dimensions", channelOrderChoices, channelOrder);
			Dialog.show();			
			nbChannel =Dialog.getNumber();
			if (Zchoice ==1) nbz=Dialog.getNumber();
			if (tChoice ==1) nbt=Dialog.getNumber();
			channelOrder=Dialog.getChoice();
			totSlices = (nbz * nbChannel) * nbt;
			first ++;
		}
	}
	run("Stack to Hyperstack...", "order=&channelOrder channels=&nbChannel slices=&nbz frames=&nbt display=Grayscale");
}

function RGBChoice () {
	getDimensions(w, h, channels, slices, frames);
	Dialog.create("RGB Option");
	Dialog.addCheckbox("Generate an RGB document", rgbOption);
	Dialog.show();
	rgbOption=Dialog.getCheckbox();
	if ((!is("composite")  && !is("hyperstack")) && rgbOption == 1) {rgbOption = 0; showMessage ("RGB Document option doesn't work for this kind of image");}
}

function setLUTsHisto () {
	if (!is("Batch Mode")) setBatchMode(true);
	imageID = getImageID();
	if (bitDepth() == 24) {exit ("This function doesn't work with 24 bit RGB encoded images"); statut =0;}
	if (chosenContratsOption == "between two set values") contrastSettings2();
	if (chosenContratsOption == "min->max each channel") contrastSettings();
	getMinAndMaxForContrast ();	
	if ((chosenContratsOption != "min->max each channel") && (chosenContratsOption != "between two set values")) globalAdjustContrastLevels (imageID);
	setBatchMode("exit and display");
}

function contrastSettings () {
	setOption("ExpandableArrays", true);
	getDimensions(w, h, channels, slices, frames);
	Dialog.create("Min\/Max Each Channel Visual Contrast Adjustment");
	if (channels >1) {
		Dialog.addMessage("Select the channel\(s\) to be optimized");
		if (lengthOf(checkList) != channels)  var checkList=newArray(channels); //resize
		for (i=0; i<channels; i++) {
			comment="Channel "+(i+1);
			Dialog.addCheckbox(comment, checkList[i]);
		}	
		Dialog.addMessage("\n");
		Dialog.addChoice("Display Range for the unchecked channel\(s\)",depthChoices, depthChoice);
	}
	Dialog.addMessage("-----------------------------------------");
	Dialog.addCheckbox("Generate an RGB document", rgbOption);
	Dialog.show();
	if (channels >1) {
		for (i=0; i<channels; i++) {	
			checkList[i] =Dialog.getCheckbox();
		}
		depthChoice = Dialog.getChoice();
	}
	rgbOption=Dialog.getCheckbox();
	if ((!is("composite")  && !is("hyperstack")) && rgbOption == 1) {rgbOption = 0; showMessage ("RGB Document option doesn't work for this kind of image");}
}

function contrastSettings2 () {
	setOption("ExpandableArrays", true);
	getDimensions(w, h, channels, slices, frames);
	Dialog.create("Min\/Max Channel User Visual Contrast Adjustment");
	Dialog.addMessage("Set Histogram Limits");
	depth=(bitDepth());
	if (bitDepth() == 24) depth=8;	
	if (minUser ==0 && maxUser ==0) {
		getRawStatistics(nPixels, mean, min, max, std, histogram);
		minUser=min; maxUser=max;
	}		
  	Dialog.addSlider("Low histogram limit:", 0, (pow(2, depth)-1), minUser);
  	Dialog.addSlider("High histogram limit:", 0, (pow(2, depth)-1), maxUser);  	
	if (channels >1) {
		Dialog.addMessage("Select the channel\(s\) to be optimized");
		if (lengthOf(checkList2) != channels)  var checkList2=newArray(channels); //resize
		for (i=0; i<channels; i++) {
			comment="Channel "+(i+1);
			Dialog.addCheckbox(comment, checkList2[i]);
		}	
		Dialog.addMessage("\n");
		Dialog.addChoice("Display Range for the unchecked channel\(s\)",depthChoices, depthChoice2);
	}
	Dialog.addMessage("-----------------------------------------");
	Dialog.addCheckbox("Generate an RGB document", rgbOption);
	Dialog.show();
	minUser=Dialog.getNumber();
	maxUser=Dialog.getNumber();	
	MinContrast=minUser; MaxContrast=maxUser;
	if (channels >1) {
		for (i=0; i<channels; i++) {	
			checkList2[i] = Dialog.getCheckbox();
		}
		depthChoice2 = Dialog.getChoice();
	}
	rgbOption=Dialog.getCheckbox();
	if ((!is("composite")  && !is("hyperstack")) && rgbOption == 1) {rgbOption = 0; showMessage ("RGB Document option doesn't work for this kind of image");}
}


function getMinAndMaxForContrast () {
	if (chosenContratsOption == "8 bit sampling \(0-255\)") {MinContrast=0; MaxContrast=255;}
	if (chosenContratsOption == "10 bit sampling \(0-1023\)") {MinContrast=0; MaxContrast=1023;}
	if (chosenContratsOption == "12 bit sampling \(0-4095\)") {MinContrast=0; MaxContrast=4095;}
	if (chosenContratsOption == "15 bit sampling \(0-32767\)") {MinContrast=0; MaxContrast=32767;}
	if (chosenContratsOption == "16 bit sampling \(0-65535\)") {MinContrast=0; MaxContrast=65535;}	
	if (chosenContratsOption == "min->max all channels") {
		if (nSlices>1) {
			Stack.getStatistics(voxelCount, mean, min, max, stdDev);
		} else {
			getRawStatistics(nPixels, mean, min, max, std, histogram);
		}
		MinContrast=min; MaxContrast=max;
	} 
	if (chosenContratsOption == "min->max each channel" || chosenContratsOption =="between two set values") {
		getDimensions(w, h, channels, slices, frames);
		if (channels <= 1) {
			// proceed as "min->max all channels"
			if (nSlices>1) {
				Stack.getStatistics(voxelCount, mean, min, max, stdDev);
			} else {
				getRawStatistics(nPixels, mean, min, max, std, histogram);
			}
			MinContrast=min; MaxContrast=max;
			for (h=1; h<=frames; h++) { 
				if (frames >1)  Stack.setFrame(h);
 				for (i=1; i<=slices; i++) {
					if (slices >1) Stack.setSlice(i);
					if (chosenContratsOption == "min->max each channel") setMinAndMax(MinContrast, MaxContrast);
					if (chosenContratsOption == "between two set values") setMinAndMax(minUser, maxUser);
				}
			}
		} 
		if (nSlices>1 && channels > 1) {
			Stack.getPosition(channel, slice, frame);				
			// duplicate to batch
			nameOfStack=getTitle();			
			idOfStack=getImageID();			
			Stack.getDimensions(widthS, heightS, channelsS, slicesS, framesS);
			stringChannel="1-"+channelsS;
			stringSlices="1-"+slicesS;
			run("Duplicate...", "title=["+nameOfStack+"] duplicate channels=&stringChannel slices=&stringSlices");
			call("ij.ImagePlus.setDefault16bitRange", 0);
			idOfStack2=getImageID();
			selectImage (idOfStack); close();
			selectImage (idOfStack2);
			nbchanneltotreat=0;			
			if (chosenContratsOption == "min->max each channel") {
				for (a=0; a< lengthOf(checkList);a++) {
					if (checkList[a]==1) nbchanneltotreat ++;
				}
				if (depthChoice == depthChoices[1]) nbchanneltotreat=channelsS;
			}
			if (chosenContratsOption == "between two set values") {
				for (a=0; a< lengthOf(checkList2);a++) {
					if (checkList2[a]==1) nbchanneltotreat ++;
				}
				if (depthChoice2 == depthChoices[1]) nbchanneltotreat=channelsS;
			}
			statutMax=slicesS*framesS*nbchanneltotreat; currentStatut=0;
			for (j=1; j<=channels; j++) {
				showProgress(currentStatut/statutMax);				
				if (chosenContratsOption == "min->max each channel") testChek= checkList[j-1];
				if (chosenContratsOption == "between two set values") testChek= checkList2[j-1];
				if (testChek == 1) {	
				// cheklist2 pour min/max manuel
					Stack.setChannel(j);
					if (chosenContratsOption == "min->max each channel") {
						compt=0;
						miniChannel = newArray (slices * frames);
						maxiChannel = newArray (slices * frames);
						for (h=1; h<=frames; h++) { 
							Stack.setFrame(h);
							for (i=1; i<=slices; i++) {
								Stack.setSlice(i);
								getStatistics(area, mean, min, max, std, histogram);
								miniChannel[compt]=min; 
								maxiChannel[compt]=max;
								compt ++;
							}
						}
						Array.getStatistics(miniChannel, min, max, mean, stdDev); MinContrast = min;
						Array.getStatistics(maxiChannel, min, max, mean, stdDev); MaxContrast = max;
					}
					for (h=1; h<=frames; h++) { 
						Stack.setFrame(h);
						for (i=1; i<=slices; i++) {
							Stack.setSlice(i);
							if (chosenContratsOption == "min->max each channel") {setMinAndMax(MinContrast, MaxContrast);}
							if (chosenContratsOption == "between two set values") {setMinAndMax(minUser, maxUser);}
							currentStatut ++;
							showProgress(currentStatut/statutMax);
						}
					}				
				} else {
					Stack.setChannel(j);	
					for (h=1; h<=frames; h++) { 
						Stack.setFrame(h);
						for (i=1; i<=slices; i++) {
							Stack.setSlice(i);
							testDepth=0;
							if (depthChoice == depthChoices[1]) testDepth=1;
							if (depthChoice2 == depthChoices[1]) testDepth=1;
							if (testDepth==1) {
								if (bitDepth() == 8) {setMinAndMax(0, 255);currentStatut ++;showProgress(currentStatut/statutMax);}
								if (bitDepth() == 16) {setMinAndMax(0, 65535);currentStatut ++;showProgress(currentStatut/statutMax);}	
							}
						}
					}				
				} 
			}
			if (is("composite") ) {
				Stack.getDisplayMode(mode);
				Stack.setDisplayMode("color");	
				Stack.setDisplayMode(mode);	
				Stack.setPosition(channel, slice, frame);
			}
		} else {
			getRawStatistics(nPixels, mean, min, max, std, histogram);
			MinContrast=min; MaxContrast=max;
		}
	if (rgbOption == 1) run("Stack to RGB"); //makeRGB ();
	}
}

function globalAdjustContrastLevels (imageID) {
	if (isOpen (imageID)) selectImage (imageID);
	n = getSliceNumber();
	if (is("hyperstack")) Stack.getPosition(channel, slice, frame);	
	nbSlices=nSlices;	
	// duplicate to batch
	nameOfStack=getTitle();			
	idOfStack=getImageID();
	Stack.getDimensions(widthS, heightS, channelsS, slicesS, framesS);
	stringChannel="1-"+channelsS;
	stringSlices="1-"+slicesS;
	run("Duplicate...", "title=["+nameOfStack+"] duplicate channels=&stringChannel slices=&stringSlices");
	call("ij.ImagePlus.setDefault16bitRange", 0);
	idOfStack2=getImageID();
	selectImage (idOfStack); close();
	selectImage (idOfStack2);
	statutMax=nbSlices;
	currentStatut=0;
	for (i=0; i<nbSlices ; i++) {
		setSlice (i+1);
		setMinAndMax(MinContrast, MaxContrast);
		showProgress(currentStatut/statutMax);
		currentStatut ++;
	}	
	setSlice (n);
	// update the composite display
	if (is("composite")) {
		Stack.getDisplayMode(mode);
		Stack.setDisplayMode("color");	
		Stack.setDisplayMode(mode);	
	}
	if (is("hyperstack")) Stack.setPosition(channel, slice, frame);
	if (rgbOption == 1) makeRGB ();
}

function setColorForChannels (idee) {
	setOption("ExpandableArrays", true);
	getDimensions(w, h, channels, slices, frames);	
	Dialog.create("Color Channels Setting");
	if (channels >0) {
		if (channels < lengthOf(ColorChs)) {
			ColorChs= Array.slice(ColorChs, 0, channels); }
		else {
			if (channels >  lengthOf(ColorChs))  ColorChs=newArray(channels); //resize
		}
		for (i=0; i<channels; i++) {
			comment="Channel "+(i+1);
			Dialog.addChoice(comment, ColorAvailable,ColorChs[i]);
		}	
	}
	Dialog.show();
	if (channels >0) {
		for (i=0; i<channels; i++) {	
			ColorChs[i] =Dialog.getChoice();
		}
	}
}

function makeRGB () {
	if (is("composite") || is("hyperstack")) {run("Stack to RGB");} 
}

function netTest () {
	if (indexOf (File.openUrlAsString(urllist), errorNetMessage) >0) exit("You need an internet access to run this function.");
}

function doc () {
	netTest ();
	showMessageWithCancel  ("A notice is avaible on line. Open it with your default web browser?");
	run("URL...", "url=["+onlinedoclink +"]");
}

function aboutTheTools () {
	requires("1.46i");
	about="-------------------- \"Multi-Channels Image and Stack Helper\" ----------------------\n";
	about= about+"This set of tools allows a fast and simple multi-dimentionnal level adjusting.\n";
	about= about+"\nThis toolset proposes a regroupment of ImageJ functions useful to make some easy image \n";
	about= about+"and multidimensional stacks visualisations. It also proposes some automatic level adjustment \n";
	about= about+"options, and some convenient editing functionalities, especially for documents with a bit \n";
	about= about+"depth greater than 8.\n";
	about= about+"------------------------------------------------------------------------------\n";
	about= about+"Installation: the tools file has to be stored in the \"ImageJ/macros/toolset\" repertory \n";
	about= about+"------------------------------------------------------------------------------\n";
	about= about+"Short documentation:\n\n";
	about= about+"-\"Stack Menu\" tool allows to open  stacks as hyperstacks (multidimensional stacks) and\n";
	about= about+"  to make composite images from single channel images.";
	about= about+"  The \"Stack to Hyperstack...\" \n  functions of ImageJ are available by click right menu.\n\n";	
	about= about+"-\"Make Composite\" tool converts stacks and hyperstacks into composite (multi channels) \n";
	about= about+"  images and hyperstacks, allowing the choice of the color affected to each channel. The \n";
	about= about+"  \"Channels ToolÉ\" of ImageJ is available by click right menu.\n\n";
	about= about+"-\"Adjust Channel Levels Menu\" tool allows several automatic level adjustments according to \n";
	about= about+"  different bit depths (8, 10, 12, 15 and 16). It also permits an optimization of the channel  \n";
	about= about+"  LUTs between the minimum and the maximum of all channels, between the minimum  \n";
	about= about+"  and the maximum of each channel or between two set values.\n";
	about= about+"-\"Adjust Min and Max\" tool opens the \"Color Balance\" setting ImageJ window.\n\n";
	about= about+"-\"Z Projection\" provides a Z projection according to the maximum intensity of a stack. The\n";
	about= about+"  full z projection options of ImageJ are available from the \"Z ProjectÉ\"  click right menu.\n\n";
	about= about+"-\"Remove Current Channel\" allows to remove the active channel. The full options of ImageJ\n";
	about= about+"  to remove slices are available from the \"Delete Slice\" click right menu.\n\n";
	about= about+"-\"Online Documentation and Demo\" tool bar menu gives some internet resources like\n";	
	about= about+"  documentation and images samples.\n\n";
	about= about+"-\Click on the \"Version and Update Infos\" ImageJ tool bar icon to look for new versions.\n";
	about=about + "\n------------------------------------------------------------------------------";
	about=about +"\nAuthor : Gilles Carpentier"+"\nFaculte des Sciences et Technologies"+"\nUniversite Paris Est Creteil Val de Marne, France.";
	about=about + "\n------------------------------------------------------------------------------\n";

	// from PrintToTextWindow macro available at the http://rsbweb.nih.gov/ij/macros/PrintToTextWindow.txt
	// author: Wayne Rasband
	title1 = "Infos for the \"16 bit Stacks Helper\"";
	title2 = "["+title1+"]";
	f = title2;
	if (isOpen(title1)) {
		print(f, "\\Update:"); // clears the window
  		print(f, about);
		selectWindow (title1);
	} else {
		run("New... ", "name="+title2+" type=[Text File] width=80 height=16");
  		print(f, about);
	}
}

function OpenImageLink(link,name,question) {
	// Check if already downloaded.
	demoimalocation = getDirectory("startup");	
	fildestination = demoimalocation+ "Downloaded Demo Images/" + name;
	if (File.exists(fildestination)) {
		if (question ==1 ) showMessageWithCancel ("The \"" + name + "\" has already been downloaded. Open it?");
		open(fildestination);
	}
	else {
		netTest ();
		showMessageWithCancel ("ImageJ will download a demo image. Continue?");
		run("URL...", "url=["+link+"]");
		imageid = getImageID();
		nomdimage = getTitle;
		// Create a <Downloaded Demo Images> repertory in ImageJ folder.
		ImaDemo = demoimalocation+"Downloaded Demo Images"+File.separator;
		File.makeDirectory(ImaDemo);
		if (!File.exists(ImaDemo)) exit("Unable to create directory, something wrong in the ImageJ folder");
		selectWindow(nomdimage);
		save(""+ImaDemo+""+ nomdimage +"");
	}
}

// -------------------*** Additionnal code for on line update resources ***-----------------------------

//Developer info
//Kind:Toolset
//Title:"Multi-Channels Image and Stack Helper" 
//Version:1.0.a
//Date: 05 March 2012
//Origin:NIH
//NotUpdateThisFile
//End info

function VersionInfos () {
	// variables for on line update resources
	beginsign="//Developer info";endsign="//End info"; 
	kind="toolsets/"; 
	urlrep="http://image.bio.methods.free.fr/ij/ijmacro/Composit/";
	name="Multi-Channels Image and Stack Helper.txt"; 
	namedev="Multi-Channels Image and Stack Helper.txt"; 
	favoritefoldername= "Macros";
	version=versionMessage();
	if (indexOf(version, "install it?" ) > 0 ) {
		macrotext=getdistantmacro (namedev,urlrep);macrolocal="";
		macropath=getDirectory("macros")+kind+namedev;
		if (File.exists(macropath)) {macrolocal=File.openAsString(macropath);}
		if (macrotext != macrolocal) {
			//perfom the installation
			Dialog.create("New version installation option");
			Dialog.addMessage(version);
			Dialog.addCheckbox("Install a Plugin Shortcut?", 0);
			Dialog.addMessage("(This option provides a shortcut in the plugins menu of ImageJ, making easier\nthe next use of the new installed version).");
			Dialog.show();
			plugin= Dialog.getCheckbox();
			f= File.open(macropath);
			print (f,macrotext);
			File.close(f);
			if (plugin ==1) {InstallPluginsStarter(namedev);}
			message="The installation of the "+giveDevInfo (macrotext,1)+ " "+ giveDevInfo (macrotext,2)+ "is completed.";
			message=message+ " Do you want to run it?";
			showMessageWithCancel(message);
			run("Install...", "install=["+macropath+"]");
		}
	} else {showMessage (version); // comment without installation available}
}

function versionMessage() {
	version="";
	if (getDirectory("startup") == 0) exit ("Unable to find the startup directory, something wrong in the ImageJ folder");
	if (getDirectory("macros") == 0) exit ("Unable to find the macros directory, something wrong in the ImageJ folder");
	MacroPath=getDirectory("macros");thismacropath=MacroPath+kind+name;
	if (! File.exists(thismacropath)) exit ("This macro has to be recorded under the name of \"" +name+"\"\ninto the \"macros/"+kind+"\" folder of ImageJ.");
	macrotext=File.openAsString(thismacropath);
	macrotextdistant=getdistantmacro (namedev,urlrep);
	version="";macrolocal="";
	version=version + "\n \nThis version of the " + giveDevInfo (macrotext,1) + " " + giveDevInfo (macrotext,2);
	version=version + "is provided by the " + giveDevInfo (macrotext,5)+ " web site.";
	version=version + "\nVersion number: " + giveDevInfo (macrotext,3)+ " - " + giveDevInfo (macrotext,4) +".";
	if (macrotextdistant !="" ) {
		new=giveDevInfo (macrotextdistant,3);old=giveDevInfo (macrotext,3);
		if (new > old) {
			macropath=getDirectory("macros")+kind+namedev;
			if (File.exists(macropath)) {macrolocal=File.openAsString(macropath);}
			if (macrotextdistant != macrolocal) {
				update="\n \nA new version "+new+ " is available on the "  +giveDevInfo (macrotextdistant,5)+ " web site: ";
				update=update+ "\n \nDo you want to install it?";
			} else {
				update ="\n \nThe latest "+new+" version called \"" +namedev+ "\" provided by \nthe "+giveDevInfo (macrotextdistant,5) +" web site has already be installed";
				update = update+ " in the \"" +kind+ "\" repertory \nof ImageJ.";
			}
		} else {
			update="No new version available.";
		}
		version=version +"\n" + update ;
	} 
	return version; 
}

function giveDevInfo (text,n) {
	lines=split(text,"\n");
	if ( (indexOf(text, beginsign)<0) || (indexOf(text, endsign)<0) ) exit ("Not upgradable macro code.");
	for (i=0; lines[i] != endsign; i ++) {}
	for (j=i; lines[j] != beginsign; j --) {}
	infotext=newArray(i-j-1);
	for (i=0; i < infotext.length; i ++) {infotext[i]=lines[i+j+1];}
	info=infotext[n-1]; signature=":";
	cut = indexOf(info, signature);
	info = substring(info,(cut+lengthOf(signature)),lengthOf(info));
	return info;
}

// Function giving the content of a distant macro (name) located at the distant repertory (urlrep).
function getdistantmacro (name,urlrep) {
	macrotextnih="";
	erNetMessage ="Error: ";
	testlink = "http://rsb.info.nih.gov/ij/macros/Arrays.txt";
	if (indexOf (File.openUrlAsString(testlink), erNetMessage) < 0) {
		distantmacrolink = urlrep + name;
		if (indexOf(distantmacrolink, " ") > -1) {
			while (indexOf(distantmacrolink, " ") > -1) {
				distantmacrolink=substring(distantmacrolink, 0, (indexOf(distantmacrolink, " ")))+"%20"+substring(distantmacrolink, (indexOf(distantmacrolink, " ")+1),lengthOf(distantmacrolink) );
			}
		}
		showStatus("Internet link...");
		macrotextnih =File.openUrlAsString(distantmacrolink);
		showStatus("");
	} else { showMessage ("No internet connection to looks for new version.");}
	return macrotextnih;
}

function InstallPluginsStarter(macroname) {
	// from MacroPluginShortcutsTool.txt
	codestarter = "run\(\"Install...\", \"install=[\"+getDirectory(\"macros\")+\""+kind+ macroname + "\]\"\);";
	if (getDirectory("plugins") == "") exit ("Unable to find the Plugins directory; something wrong in the ImageJ folder.");
	if (endsWith(macroname, ".txt") || endsWith(macroname, ".ijm")) pluginname = substring(macroname, 0, (lengthOf(macroname)-4));
	StarterDir = getDirectory("plugins")+favoritefoldername+File.separator;
	File.makeDirectory(StarterDir);
	if (!File.exists(StarterDir)) exit ("Unable to create "+favoritefoldername+" Macros directory, something wrong in the ImageJ folder.");
	starterplugin = StarterDir + pluginname +"_ .ijm";
	f= File.open(StarterDir + pluginname +"_ .ijm");
	print (f,codestarter);
	File.close(f);
	showMessage ("The plugin shortcut \"" +pluginname+ "\" will be available after\nImageJ restarting, in the \"Plugins->" + favoritefoldername + "\" menu.");
}

// *** End of additionnal code for on line update ressources ***
